OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
Comment
  This scenario is an example of
  how to convert files between formats.

  Conversion may not work correctly for all
  possible input and output combinations.

  You may have to customize the scenario
  to your particular case.

  If you run this scenario manually from Designer,
  please configure the input and output filenames
  of the reader and writer boxes.

  Script 'openvibe-convert' relies on this scenario.

Generic stream reader => #0
  Filename = C:/git/Senior_Thesis/DataSet/OpenTopic_dataset/pipo_test/3_class/train_hand1
#0.Output stream 2 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 30
-> Common Average Reference
-> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #4
  New channel names = Fz;C3;Cz;C4;Pz;PO7;Oz;PO8
Experiment information=#0.Output stream 1, Signal=#4, Stimulations=#0.Output stream 3 -> EDF File Writer
  Filename = C:/git/Senior_Thesis/DataSet/Convert_data/class3_try2_edf.edf
#0.Output stream 2 -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
Experiment information=#0.Output stream 1, Signal=#0.Output stream 2, Stimulation=#0.Output stream 3 -> 0x341d3912 GDF file writer
  Filename = C:/git/Senior_Thesis/DataSet/Convert_data/3class_try_gdf

Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 0
  High Cut-off Frequency (Hz) = 50

0x341d3912 Channel Rename
  New channel names = Fz;C3;Cz;C4;Pz;PO7;Oz;PO8
